PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tarea_iceberg
  keyboardBackend = ioHub
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Routines
  Routine control
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    ImageComponent image
      image [set every repeat] = imgs/iceberg.png
      pos [set every repeat] = $[posx, posy]
      size = (0.35, 0.35)
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    CodeComponent mar1
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        nRows = 8
        totalRows = 118  # Replace with the total number of rows in your Excel file
        selectedRows = random.sample(range(totalRows), nRows)
        selectedRowsStr = [i for i in selectedRows]


        mar_movie = visual.MovieStim3(
            win=win,                        # Ventana en la que se va a mostrar el video
            filename='imgs/video_mar.mp4', # Ruta al archivo de video
            size=(1900,1200),               # Tamaño del video (opcional)
            pos=(0,0),
            flipVert=False,                 # Si se debe voltear verticalmente
            flipHoriz=False,                # Si se debe voltear horizontalmente
            loop=True                      # Si el video debe repetirse
        )
      Begin Routine:
        mar_movie.play()
      Each Frame:
        mar_movie.draw()
  Routine music
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    ImageComponent image_2
      image [set every repeat] = imgs/iceberg.png
      pos [set every repeat] = $[posx, posy]
      size = (0.35, 0.35)
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        selectedRows = random.sample(range(totalRows), nRows)
        selectedRowsStr = [i for i in selectedRows]

        background_sound = visual.MovieStim3(
            win=win,                        # Ventana en la que se va a mostrar el video
            filename='imgs/song_titanic.mp4', # Ruta al archivo de video
            size=(20, 20),               # Tamaño del video (opcional)
            pos=(0,0),
            flipVert=False,                 # Si se debe voltear verticalmente
            flipHoriz=False,                # Si se debe voltear horizontalmente
            loop=False                      # Si el video debe repetirse
        )
      Begin Routine:
        if trials_2.thisN == 0:
            background_sound.play()
      End Routine:
        if trials_2.thisN == nRows-1:
            background_sound.stop()
    CodeComponent mar2
      Code Type = Auto->JS
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      Begin Routine:
        mar_movie.play()
      Each Frame:
        mar_movie.draw()
  Routine music_words
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        background_movie = visual.MovieStim3(
            win=win,                        # Ventana en la que se va a mostrar el video
            filename='imgs/titanic_spanish.mp4', # Ruta al archivo de video
            size=(10,10),               # Tamaño del video (opcional)
            pos=(0,0),
            flipVert=False,                 # Si se debe voltear verticalmente
            flipHoriz=False,                # Si se debe voltear horizontalmente
            loop=False                      # Si el video debe repetirse
        )
      Begin Routine:
        selectedRows = random.sample(range(totalRows), nRows)
        selectedRowsStr = [i for i in selectedRows]

        if trials_3.thisN == 0:
            background_movie.play()
            background_movie.draw()
      Each Frame:
        background_movie.draw()
      End Routine:
        if trials_3.thisN == nRows-1:
            background_movie.stop()
    CodeComponent mar3
      Code Type = Auto->JS
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      Begin Routine:
        mar_movie.play()
      Each Frame:
        mar_movie.draw()
    ImageComponent image_3
      image [set every repeat] = imgs/iceberg.png
      pos [set every repeat] = $[posx, posy]
      size = (0.35, 0.35)
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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  Routine instructions2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = ¡Empezamos la segunda ronda!
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  Routine instructions3
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ¡empezamos la tercera ronda!
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  Routine videonotworking
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    CodeComponent code_X
      Code Type = Auto->JS
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      Begin Experiment:
        #background_sound = visual.MovieStim('imgs/song_titanic.mp4')
        #background_sound = sound.Sound('imgs/song_titanic.mp4')
        #myMovie.movie = 'imgs/song_titanic.mp4'

        background_movie2 = visual.MovieStim3(
            win=win,                        # Ventana en la que se va a mostrar el video
            filename='imgs/video_celine.mp4', # Ruta al archivo de video
            size=(1000, 1000),               # Tamaño del video (opcional)
            pos=(0,0),
            flipVert=False,                 # Si se debe voltear verticalmente
            flipHoriz=False,                # Si se debe voltear horizontalmente
            loop=False                      # Si el video debe repetirse
        )
      Begin Routine:
        if trials_4.thisN == 0:
            background_movie2.play()
            background_movie2.draw()
            #background_sound.pos(0,0)
            #background_sound.size(0.1, 0.1)
      Each Frame:
        background_movie2.draw()
      End Routine:
        if trials_4.thisN == 1:
            background_movie2.stop()
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine music_video
    CodeComponent code_2_2
      Code Type = Auto->JS
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      Begin Experiment:
        background_movie_s = visual.MovieStim3(
            win=win,                        # Ventana en la que se va a mostrar el video
            filename='imgs/titanic_spanish.mp4', # Ruta al archivo de video
            size=(10,10),               # Tamaño del video (opcional)
            pos=(0,0),
            flipVert=False,                 # Si se debe voltear verticalmente
            flipHoriz=False,                # Si se debe voltear horizontalmente
            loop=False                      # Si el video debe repetirse
        )
      Begin Routine:
        if trials_4.thisN == 0:
            background_movie_s.play()
            background_movie_s.draw()
      Each Frame:
        background_movie_s.draw()
      End Routine:
        if trials_4.thisN == nRows-1:
            background_movie_s.stop()
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    CodeComponent mar4
      Code Type = Auto->JS
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      Begin Routine:
        mar_movie.play()
      Each Frame:
        mar_movie.draw()
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        background_movie2 = visual.MovieStim3(
            win=win,                        # Ventana en la que se va a mostrar el video
            filename='imgs/titanic.mp4', # Ruta al archivo de video
            size=(500,400),               # Tamaño del video (opcional)
            pos=(0,100),
            flipVert=False,                 # Si se debe voltear verticalmente
            flipHoriz=False,                # Si se debe voltear horizontalmente
            loop=False                      # Si el video debe repetirse
        )
      Begin Routine:
        selectedRows = random.sample(range(totalRows), nRows)
        selectedRowsStr = [i for i in selectedRows]


        if trials_4.thisN == 0:
            background_movie2.play()
            background_movie2.draw()
      Each Frame:
        background_movie2.draw()
      End Routine:
        if trials_4.thisN == nRows-1:
            background_movie2.stop()
    ImageComponent image_4
      image [set every repeat] = imgs/iceberg.png
      pos [set every repeat] = $[posx, posy]
      size = (0.35, 0.35)
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    KeyboardComponent Key_resp_4
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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  Routine instructions4
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ¡última ronda!
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  Routine final
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ¡Muchas gracias por participar!
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  Routine instructions
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    TextComponent text_5
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        En este experiemento te verás navegando por el mar...

        ¡Pero hay icebergs que aparcerán de repente en pantalla!

        Cuando veas uno, debes pulsar "SPACE" lo más rápido posible.

        Hay 4 rondas.

        Cuando estés listo, aprieta "SPACE" para empezar.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine portada
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    ImageComponent image_5
      image = imgs/logo_OB.jpeg
      size = (0.6, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text_6
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = ¡Bienvenido a un experimento de Open Brains!
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Flow
  Routine portada
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $selectedRowsStr
    conditionsFile = imgs/iceberg_times.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'timepresentation': 3, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 4, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 5, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 6, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 7, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 8, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 9, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 10, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 11, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 12, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 13, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 14, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 15, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 3, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 4, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 5, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 6, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 7, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 8, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 9, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 10, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 11, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 12, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 13, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 14, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 15, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 3, 'posx': -0.6, 'posy': 0.15},
      {'timepresentation': 4, 'posx': -0.6, 'posy': 0.15},
      {'timepresentation': 5, 'posx': -0.6, 'posy': 0.15}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
    Routine control
  LoopTerminator trials
  Routine instructions2
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = $selectedRowsStr
    conditionsFile = imgs/iceberg_times.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine music
  LoopTerminator trials_2
  Routine instructions3
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = $selectedRowsStr
    conditionsFile = imgs/iceberg_times.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine music_words
  LoopTerminator trials_3
  Routine instructions4
  LoopInitiator trials_4 loopType="TrialHandler"
    Selected rows = $selectedRowsStr
    conditionsFile = imgs/iceberg_times.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine music_video
  LoopTerminator trials_4
  Routine final
